//execute1("celltypes.element(\"Mycell\")")

begintemplate Mycell
public init, topol, basic_shape, subsets, geom, biophys, geom_nseg, biophys_inhomo
public synlist, x, y, z, position, connect2target

public soma, apic, dend, axon
public all, somatic, axonal, basal, apical, has_HH, no_HH

objref synlist

proc init() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
  synlist = new List()
  synapses()
  x = y = z = 0 // only change via position
}

create soma, apic[27], dend[53], axon

proc topol() { local i
  connect apic(0), soma(0.5)
  for i = 1, 4 connect apic[i](0), apic[i-1](1)
  connect apic[5](0), apic[3](1)
  connect apic[6](0), apic[2](1)
  connect apic[7](0), apic[1](1)
  connect apic[8](0), apic(1)
  for i = 9, 10 connect apic[i](0), apic[i-1](1)
  connect apic[11](0), apic[9](1)
  for i = 12, 15 connect apic[i](0), apic[i-1](1)
  connect apic[16](0), apic[14](1)
  connect apic[17](0), apic[13](1)
  connect apic[18](0), apic[12](1)
  for i = 19, 20 connect apic[i](0), apic[18](1)
  connect apic[21](0), apic[11](1)
  for i = 22, 23 connect apic[i](0), apic[21](1)
  connect apic[24](0), apic[8](1)
  for i = 25, 26 connect apic[i](0), apic[24](1)
  connect dend(0), soma(0.5)
  for i = 1, 2 connect dend[i](0), dend(1)
  connect dend[3](0), soma(0.5)
  for i = 4, 5 connect dend[i](0), dend[i-1](1)
  connect dend[6](0), dend[4](1)
  connect dend[7](0), dend[3](1)
  connect dend[8](0), soma(0.5)
  for i = 9, 10 connect dend[i](0), dend[i-1](1)
  connect dend[11](0), dend[9](1)
  for i = 12, 13 connect dend[i](0), dend[11](1)
  for i = 14, 15 connect dend[i](0), dend[13](1)
  connect dend[16](0), dend[8](1)
  connect dend[17](0), soma(0.5)
  for i = 18, 19 connect dend[i](0), dend[i-1](1)
  connect dend[20](0), dend[18](1)
  connect dend[21](0), dend[17](1)
  for i = 22, 23 connect dend[i](0), dend[21](1)
  for i = 24, 25 connect dend[i](0), dend[23](1)
  connect dend[26](0), soma(0.5)
  for i = 27, 28 connect dend[i](0), dend[26](1)
  connect dend[29](0), soma(0.5)
  for i = 30, 31 connect dend[i](0), dend[29](1)
  connect dend[32](0), soma(0.5)
  for i = 33, 34 connect dend[i](0), dend[32](1)
  for i = 35, 36 connect dend[i](0), dend[34](1)
  connect dend[37](0), soma(0.5)
  for i = 38, 39 connect dend[i](0), dend[i-1](1)
  connect dend[40](0), dend[38](1)
  connect dend[41](0), dend[37](1)
  for i = 42, 43 connect dend[i](0), dend[41](1)
  for i = 44, 45 connect dend[i](0), dend[43](1)
  connect dend[46](0), soma(0.5)
  for i = 47, 48 connect dend[i](0), dend[46](1)
  for i = 49, 50 connect dend[i](0), dend[48](1)
  for i = 51, 52 connect dend[i](0), dend[50](1)
  connect axon(0), soma(0.5)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(361.573, 302.931, 20.72, 15.8784)
	pt3dadd(369.512, 302.931, 20.72, 15.8784)
	pt3dadd(377.451, 302.931, 20.72, 15.8784)
  }
  apic {pt3dclear()
	pt3dstyle(1, 369.512, 302.931, 20.72)
	pt3dadd(368.613, 310.599, 19.6, 0.7118)
	pt3dadd(368.988, 311.67, 19.6003, 0.9152)
	pt3dadd(368.914, 312.806, 19.6028, 1.0424)
	pt3dadd(368.375, 313.802, 19.614, 1.0168)
	pt3dadd(367.843, 314.813, 19.6734, 0.9406)
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  }
}
proc shape3d_2() {
  apic[6] {	pt3dadd(437.58, 360.474, 23.24, 0.6356)
	pt3dadd(438.279, 361.161, 23.2711, 0.6102)
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  }
}
proc shape3d_3() {
  apic[6] {	pt3dadd(519.426, 384.842, 35.9957, 0.483)
	pt3dadd(519.884, 384.651, 35.5911, 0.483)
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  }
}
proc shape3d_4() {
  apic[11] {	pt3dadd(353.418, 342.451, 22.1813, 0.788)
	pt3dadd(353.113, 343.536, 22.076, 0.8136)
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  }
}
proc shape3d_5() {
  apic[11] {	pt3dadd(264.127, 542.803, 49.84, 0.8136)
	pt3dadd(263.716, 543.867, 49.84, 0.8898)
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  }
}
proc shape3d_6() {
  apic[13] {	pt3dadd(190.133, 712, 66.2978, 0.839)
	pt3dadd(190.133, 712.598, 66.64, 0.6864)
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  }
}
proc shape3d_7() {
  apic[17] {	pt3dadd(239.707, 817.112, 84.8498, 0.2288)
	pt3dadd(244.684, 820.427, 84.8498, 0.2796)
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  }
}
proc shape3d_8() {
  dend[1] {	pt3dadd(390.636, 334.237, 16.2358, 0.6864)
	pt3dadd(391.198, 335.224, 16.2179, 0.661)
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  }
}
proc shape3d_9() {
  dend[5] {	pt3dadd(449.097, 354.665, 20.1911, 0.483)
	pt3dadd(449.605, 354.945, 20.0978, 0.661)
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  }
}
proc shape3d_10() {
  dend[6] {	pt3dadd(455.884, 386.863, 20.6268, 0.483)
	pt3dadd(456.316, 387.384, 19.88, 0.5338)
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  }
}
proc shape3d_11() {
  dend[7] {	pt3dadd(474.163, 256.917, 11.2, 0.3814)
	pt3dadd(474.442, 256.714, 11.6978, 0.4322)
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  }
}
proc shape3d_12() {
  dend[12] {	pt3dadd(310.313, 269.516, 12.8797, 0.788)
	pt3dadd(309.467, 268.808, 12.8789, 0.7372)
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  }
}
proc shape3d_13() {
  dend[15] {	pt3dadd(284.742, 275.704, 8.12, 0.2542)
	pt3dadd(284.513, 275.704, 8.12, 0.2288)
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  }
}
proc shape3d_14() {
  dend[20] {	pt3dadd(339.761, 294.404, 13.9535, 0.6864)
	pt3dadd(338.777, 294.943, 14.4197, 0.6102)
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  }
}
proc shape3d_15() {
  dend[27] {	pt3dadd(383.227, 316.545, 7.0311, 0.5848)
	pt3dadd(383.926, 316.659, 7.28, 0.8136)
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  }
}
proc shape3d_16() {
  dend[33] {	pt3dadd(452.54, 318.514, 31.7559, 0.7372)
	pt3dadd(453.483, 318.92, 32.916, 0.7626)
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  }
}
proc shape3d_17() {
  dend[33] {	pt3dadd(527.931, 363.245, 31.36, 0.5084)
	pt3dadd(528.261, 363.563, 31.1732, 0.5338)
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  }
}
proc shape3d_18() {
  dend[37] {	pt3dadd(366.284, 294.101, 21.0199, 0.4322)
	pt3dadd(365.775, 293.433, 21.0199, 0.483)
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  }
}
proc shape3d_19() {
  dend[40] {	pt3dadd(324.438, 227.427, 36.4, 0.2288)
	pt3dadd(324.159, 226.906, 36.4, 0.2288)
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  }
}
proc shape3d_20() {
  dend[42] {	pt3dadd(289.562, 221.202, 27.216, 0.3304)
	pt3dadd(287.844, 219.09, 25.615, 0.356)
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  }
}
proc shape3d_21() {
  dend[47] {	pt3dadd(385.223, 278.716, 57.12, 0.7118)
	pt3dadd(385.655, 278.196, 56.3732, 0.788)
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  }
}
proc shape3d_22() {
  dend[50] {	pt3dadd(380.621, 276.619, 44.4889, 0.9152)
	pt3dadd(381.27, 275.908, 44.52, 0.6102)
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  }
}
proc shape3d_23() {
  dend[51] {	pt3dadd(449.935, 312.998, 69.16, 0.2288)
	pt3dadd(449.935, 313.342, 69.16, 0.2288)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
  shape3d_16()
  shape3d_17()
  shape3d_18()
  shape3d_19()
  shape3d_20()
  shape3d_21()
  shape3d_22()
  shape3d_23()
}

objref all, somatic, axonal, basal, apical, has_HH, no_HH
proc subsets() { local i
  objref all, somatic, axonal, basal, apical, has_HH, no_HH
  all = new SectionList()
    soma all.append()
    for i=0, 26 apic[i] all.append()
    for i=0, 52 dend[i] all.append()
    axon all.append()

  somatic = new SectionList()
    soma somatic.append()

  axonal = new SectionList()
    axon axonal.append()

  basal = new SectionList()
    for i=0, 52 dend[i] basal.append()

  apical = new SectionList()
    for i=0, 26 apic[i] apical.append()

  has_HH = new SectionList()
    soma has_HH.append()
    axon has_HH.append()

  no_HH = new SectionList()
    for i=0, 26 apic[i] no_HH.append()
    for i=0, 52 dend[i] no_HH.append()

}
proc geom() {
  forsec all {  }
}
external lambda_f
proc geom_nseg() {
  forsec all { nseg = int((L/(0.1*lambda_f(100))+.999)/2)*2 + 1  }
}
proc biophys() {
  forsec all {
    Ra = 100
  }
  forsec has_HH {
    insert hh
      gnabar_hh = 0.12
      gkbar_hh = 0.036
      gl_hh = 0.0003
      el_hh = -54.3
  }
  forsec no_HH {
    insert pas
      g_pas = 0.0002
      e_pas = -65
  }
}
proc biophys_inhomo(){}
proc position() { local i
  soma for i = 0, n3d()-1 {
    pt3dchange(i, $1-x+x3d(i), $2-y+y3d(i), $3-z+z3d(i), diam3d(i))
  }
  x = $1  y = $2  z = $3
}
obfunc connect2target() { localobj nc //$o1 target point process, optional $o2 returned NetCon
  soma nc = new NetCon(&v(1), $o1)
  nc.threshold = 10
  if (numarg() == 2) { $o2 = nc } // for backward compatibility
  return nc
}
proc synapses() {}
endtemplate Mycell
